<PlusConfiguration version="2.7">

  <DataCollection StartupDelaySec="1.0">
    <DeviceSet
      Name="PlusServer: ASTM Phantom Test (Atracsys)"
      Description="Broadcasting through OpenIGTLink the tracking data necessary for the ASTM Phantom Test from an Atracsys device."
    />
    <Device
      Id="TrackerDevice"
      Type="AtracsysTracker"
      MaxMissingFiducials="0"
      MaxMeanRegistrationErrorMm="1.0"
      SymmetriseCoordinates="1"
      EnableLasers="0"
	  EnableIRstrobe="1"
	  ImageCompressionThreshold="50"
	  ImageIntegrationTime="130"
      ToolReferenceFrame="Tracker" >
      <DataSources>
        <DataSource Type="Tool" Id="Phantom" TrackingType="PASSIVE" GeometryFile="AtracsysTools/geometry104.ini" />
        <DataSource Type="Tool" Id="Pointer" TrackingType="PASSIVE" GeometryFile="AtracsysTools/geometry020.ini" />
      </DataSources>
      <OutputChannels>
        <OutputChannel Id="TrackerStream">
          <DataSource Type="Tool" Id="Phantom" />
          <DataSource Type="Tool" Id="Pointer" />
        </OutputChannel>
      </OutputChannels>
    </Device>
  </DataCollection>

  <PlusOpenIGTLinkServer
    MaxNumberOfIgtlMessagesToSend="1"
    MaxTimeSpentWithProcessingMs="50"
    ListeningPort="18944"
    SendValidTransformsOnly="FALSE"
    OutputChannelId="TrackerStream" >
    <DefaultClientInfo>
      <MessageTypes>
        <Message Type="TRANSFORM" />
      </MessageTypes>
      <TransformNames>
        <Transform Name="PointerToPhantom" />
        <Transform Name="PointerToTracker" />
        <Transform Name="PhantomToTracker" />
      </TransformNames>
    </DefaultClientInfo>
  </PlusOpenIGTLinkServer>
  
</PlusConfiguration>