<PlusConfiguration version="2.7">

  <DataCollection StartupDelaySec="1.0">
    <DeviceSet
      Name="PlusServer: Atracsys"
      Description="Broadcasting tracking data from Atracsys spryTrack180, fusionTrack250 or fusionTrack500 through OpenIGTLink."
    />
    <Device
      Id="TrackerDevice"
      Type="AtracsysTracker"
      MaxMissingFiducials="1"
      MaxMeanRegistrationErrorMm="1.0"
      ActiveMarkerPairingTimeSec="15"
      ToolReferenceFrame="Tracker" >
      <DataSources>
        <DataSource Type="Tool" Id="Stylus" TrackingType="PASSIVE" GeometryFile="AtracsysTools/stylus.ini" />
        <DataSource Type="Tool" Id="Reference" TrackingType="ACTIVE" GeometryId="371000" />
      </DataSources>
      <OutputChannels>
        <OutputChannel Id="TrackerStream">
        <DataSource Type="Tool" Id="Stylus" />
        <DataSource Type="Tool" Id="Reference" />
        </OutputChannel>
      </OutputChannels>
    </Device>
  </DataCollection>

  <PlusOpenIGTLinkServer
    MaxNumberOfIgtlMessagesToSend="1"
    MaxTimeSpentWithProcessingMs="50"
    ListeningPort="18944"
    SendValidTransformsOnly="TRUE"
    OutputChannelId="TrackerStream" >
    <DefaultClientInfo>
      <MessageTypes>
        <Message Type="TRANSFORM" />
      </MessageTypes>
      <TransformNames>
        <Transform Name="StylusToTracker" />
        <Transform Name="ReferenceToTracker" />
      </TransformNames>
    </DefaultClientInfo>
  </PlusOpenIGTLinkServer>
  
</PlusConfiguration>