<PlusConfiguration version="2.6">

  <DataCollection StartupDelaySec="1.0">
    <DeviceSet
      Name="PlusServer: Atracsys spryTrack 180"
      Description="Broadcasting tracking data through OpenIGTLink."
    />
    <Device
      Id="TrackerDevice"
      Type="AtracsysTracker"
      MaxMissingFiducials="1"
      ActiveMarkerPairingTimeSec="15"
      ToolReferenceFrame="Tracker" >
      <DataSources>
        <DataSource Type="Tool" Id="Stylus" GeometryFile="AtracsysTools/stylus.ini" />
        <DataSource Type="Tool" Id="Reference" GeometryFile="ATRACSYS_ACTIVE_BOOMERANG" />
      </DataSources>
      <OutputChannels>
        <OutputChannel Id="TrackerStream">
        <DataSource Type="Tool" Id="Stylus" />
        <DataSource Type="Tool" Id="Reference" />
        </OutputChannel>
      </OutputChannels>
    </Device>
  </DataCollection>

  <PlusOpenIGTLinkServer
    MaxNumberOfIgtlMessagesToSend="1"
    MaxTimeSpentWithProcessingMs="50"
    ListeningPort="18944"
    SendValidTransformsOnly="TRUE"
    OutputChannelId="TrackerStream" >
    <DefaultClientInfo>
      <MessageTypes>
        <Message Type="TRANSFORM" />
      </MessageTypes>
      <TransformNames>
        <Transform Name="StylusToTracker" />
        <Transform Name="ReferenceToTracker" />
      </TransformNames>
    </DefaultClientInfo>
  </PlusOpenIGTLinkServer>
  
</PlusConfiguration>