<PlusConfiguration version="2.3">
  <DataCollection StartupDelaySec="1.0">
    <DeviceSet Name="PlusServer: Azure Kinect Camera " Description="Broadcasting acquired RGB and Depth video through PlusServer from Azure Kinect camera" />
    <Device Id="VideoDevice" Type="AzureKinect" AlignDepthStream="TRUE">
      <DataSources>
        <DataSource Type="Video" Id="VideoRGB" FrameType="RGB" FrameSize="1920" FrameRate="15" PortUsImageOrientation="UN" />
        <DataSource Type="Video" Id="VideoDEPTH" FrameType="DEPTH" FrameSize="1024" FrameRate="15" PortUsImageOrientation="UN" />
        <DataSource Type="Video" Id="VideoPCL" FrameType="PCL" FrameSize="1920" FrameRate="15" PortUsImageOrientation="UN" />
      </DataSources>
      <OutputChannels>
        <OutputChannel Id="VideoStreamRGB" VideoDataSourceId="VideoRGB" />
        <OutputChannel Id="VideoStreamDEPTH" VideoDataSourceId="VideoDEPTH" />
        <OutputChannel Id="VideoStreamPCL" VideoDataSourceId="VideoPCL" />
      </OutputChannels>
    </Device>
  </DataCollection>
  <PlusOpenIGTLinkServer MaxNumberOfIgtlMessagesToSend="1" MaxTimeSpentWithProcessingMs="50" ListeningPort="18944" SendValidTransformsOnly="true" OutputChannelId="VideoStreamDEPTH">
    <DefaultClientInfo>
      <MessageTypes>
        <Message Type="IMAGE" />
      </MessageTypes>
      <ImageNames>
        <Image Name="VideoStreamDEPTH" EmbeddedTransformToFrame="VideoStreamDEPTH" />
      </ImageNames>
    </DefaultClientInfo>
  </PlusOpenIGTLinkServer>
  <PlusOpenIGTLinkServer MaxNumberOfIgtlMessagesToSend="1" MaxTimeSpentWithProcessingMs="50" ListeningPort="18945" SendValidTransformsOnly="true" OutputChannelId="VideoStreamRGB">
    <DefaultClientInfo>
      <MessageTypes>
        <Message Type="IMAGE" />
      </MessageTypes>
      <ImageNames>
        <Image Name="VideoStreamRGB" EmbeddedTransformToFrame="VideoStreamRGB" />
      </ImageNames>
    </DefaultClientInfo>
  </PlusOpenIGTLinkServer>
  <PlusOpenIGTLinkServer MaxNumberOfIgtlMessagesToSend="1" MaxTimeSpentWithProcessingMs="50" ListeningPort="18946" SendValidTransformsOnly="true" OutputChannelId="VideoStreamPCL">
    <DefaultClientInfo>
      <MessageTypes>
        <Message Type="IMAGE" />
      </MessageTypes>
      <ImageNames>
        <Image Name="VideoStreamPCL" EmbeddedTransformToFrame="VideoStreamPCL" />
      </ImageNames>
    </DefaultClientInfo>
  </PlusOpenIGTLinkServer>
</PlusConfiguration>