<PlusConfiguration version="2.0">

  <DataCollection StartupDelaySec="1.0" >
    <DeviceSet 
      Name="PlusServer: Media Foundation video capture device - color"
      Description="Broadcasting acquired video through OpenIGTLink" />
    <Device
      Id="VideoDevice" 
      Type="MmfVideo" 
      FrameSize="1920 1080"
      VideoFormat="RGB24"
      CaptureDeviceId="0" >
      <DataSources>
        <DataSource Type="Video" Id="Video" PortUsImageOrientation="MF" ImageType="RGB_COLOR"  />
      </DataSources>      
      <OutputChannels>
        <OutputChannel Id="VideoStream" VideoDataSourceId="Video" />
      </OutputChannels>
    </Device>
    <Device
      Id="CaptureDevice"
      Type="VirtualCapture"
      BaseFilename="RecordingTest.igs.mha"
      EnableCapturingOnStart="FALSE" >
      <InputChannels>
        <InputChannel Id="VideoStream" />
      </InputChannels>
    </Device>
  </DataCollection>

  <CoordinateDefinitions>
    <Transform From="Image" To="Reference"
      Matrix="
        0.2 0.0 0.0 0.0
        0.0 0.2 0.0 0.0
        0.0 0.0 0.2 0.0
        0 0 0 1" />
  </CoordinateDefinitions>
  
  <PlusCanonNCSAServer OutputChannelId="VideoStream"/>

</PlusConfiguration>
