<PlusConfiguration version="2.1">
  <DataCollection StartupDelaySec="1.0" >
    <DeviceSet
      Name="PlusServer: Clarius ultrasound device"
      Description="Broadcasting acquired video through OpenIGTLink"/>
    <Device Id="VideoDevice"
      Type="Clarius"
      IpAddress = "192.168.1.1"
      TcpPort = "5828"
      FrameWidth = "640"
      FrameHeight = "480"
      ImuEnabled = "TRUE"
      ImuOutputFileName = "ImuOutput.csv"
      WriteImagesToDisk = "FALSE">
      <DataSources>
        <DataSource Type="Video" Id="Video" PortName="B" PortUsImageOrientation="UN"/>
      </DataSources>
      <OutputChannels>
        <OutputChannel Id="VideoStream" VideoDataSourceId="Video" />
      </OutputChannels>
    </Device>
    <Device
      Id="CaptureDevice"
      Type="VirtualCapture"
      BaseFilename= "ClariusRecording.igs.mha"
      EnableCapturingOnStart="FALSE"
      RequestedFrameRate="25"
      EnableCapturing="TRUE" >
      <InputChannels>
        <InputChannel Id="VideoStream" />
      </InputChannels>
    </Device>
  </DataCollection>
  <CoordinateDefinitions>
    <Transform From="Image" To="Reference"
      Matrix="
      0.2 0.0 0.0 0.0
      0.0 0.2 0.0 0.0
      0.0 0.0 0.2 0.0
      0 0 0 1" />
  </CoordinateDefinitions>
  <PlusOpenIGTLinkServer
    MaxNumberOfIgtlMessagesToSend="1"
    MaxTimeSpentWithProcessingMs="50"
    ListeningPort="18944"
    SendValidTransformsOnly="false"
    OutputChannelId="VideoStream" >
    <DefaultClientInfo>
      <MessageTypes>
        <Message Type="IMAGE" />
      </MessageTypes>
      <ImageNames>
        <Image Name="Image" EmbeddedTransformToFrame="Reference" />
      </ImageNames>
    </DefaultClientInfo>
  </PlusOpenIGTLinkServer>
</PlusConfiguration>
