<PlusConfiguration version="2.1">

    <DataCollection StartupDelaySec="1.0">
        <DeviceSet Name="PlusServer: Generic sensor" Description="Broadcasting available sensors tracking data through OpenIGTLink" />
        <Device Id="TrackerDevice" Type="GenericSensor" ToolReferenceFrame="Tracker">
            <DataSources>
                <DataSource Type="Tool" Id="Accelerometer" PortName="Accelerometer" />
            </DataSources>
            <OutputChannels>
                <OutputChannel Id="TrackerStream">
                    <DataSource Id="Accelerometer"/>
                </OutputChannel>
            </OutputChannels>
        </Device>
        <Device Id="CaptureDevice" Type="VirtualCapture" BaseFilename="RecordingTest.igs.mha" EnableCapturingOnStart="FALSE">
            <InputChannels>
                <InputChannel Id="TrackerStream" />
            </InputChannels>
        </Device>
    </DataCollection>

    <PlusOpenIGTLinkServer MaxNumberOfIgtlMessagesToSend="1" MaxTimeSpentWithProcessingMs="50" ListeningPort="18944" OutputChannelId="TrackerStream">
        <DefaultClientInfo>
            <MessageTypes>
                <Message Type="TRANSFORM" />
            </MessageTypes>
            <TransformNames>
                <Transform Name="AccelerometerToTracker" />
            </TransformNames>
        </DefaultClientInfo>
    </PlusOpenIGTLinkServer>

</PlusConfiguration>