<PlusConfiguration version="2.1">

  <DataCollection StartupDelaySec="1.0">
    <DeviceSet 
      Name="PlusServer: Generic serial device" 
      Description="Send text and receive response through OpenIGTLink"
    />
    <Device 
      Id="SerialDevice"
      Type="GenericSerialDevice"
      SerialPort="5"
      BaudRate="9600"
      LineEnding="0d"
      >
      <DataSources>
        <DataSource Id="SerialData" Type="FieldData"/>
      </DataSources>
      <OutputChannels>
        <OutputChannel Id="FieldChannel">
          <DataSource Id="SerialData"/>
        </OutputChannel>
      </OutputChannels>
    </Device>
  </DataCollection>
  
  <PlusOpenIGTLinkServer 
    MaxNumberOfIgtlMessagesToSend="1" 
    MaxTimeSpentWithProcessingMs="50" 
    ListeningPort="18944" 
    LogWarningOnNoDataAvailable="false"
    OutputChannelId="FieldChannel" >
    <DefaultClientInfo> 
      <MessageTypes> 
        <Message Type="STRING" />
      </MessageTypes>
      <StringNames>
        <String Name="SerialData" />
      </StringNames>
    </DefaultClientInfo>
  </PlusOpenIGTLinkServer>
  
</PlusConfiguration>