 <PlusConfiguration version="2.1">

  <DataCollection StartupDelaySec="1.0" >
    <DeviceSet
      Name="PlusServer: OpenCV device capturing a webcam stream"
      Description="Broadcasting acquired video through OpenIGTLink"
    />
    <Device
      Id="VideoDevice"
      Type="OpenCVVideo" 
      RequestedCaptureApi="CAP_ANY"
      DeviceIndex="0"
      AcquisitionRate="30"
      FrameSize="1920 1080"
      CameraMatrix="1.37283619e+03 0.00000000e+00 9.54121780e+02
                    0.00000000e+00 1.37375569e+03 5.82778125e+02
                    0.00000000e+00 0.00000000e+00 1.00000000e+00"
      DistortionCoefficients="0.05713149  0.11501285  0.00879134  0.00346327 -0.6814123" >
      <DataSources>
        <DataSource Type="Video" Id="Video" ImageType="RGB_COLOR" PortUsImageOrientation="MF"  />
      </DataSources>
      <OutputChannels>
        <OutputChannel Id="VideoStream" VideoDataSourceId="Video" />
      </OutputChannels>
    </Device>
  </DataCollection>

  <CoordinateDefinitions>
    <Transform From="Image" To="Reference"
      Matrix="
        1 0 0 0
        0 1 0 0
        0 0 1 0
        0 0 0 1" />
  </CoordinateDefinitions>

  <PlusOpenIGTLinkServer
    MaxNumberOfIgtlMessagesToSend="1"
    MaxTimeSpentWithProcessingMs="50"
    ListeningPort="18944"
    SendValidTransformsOnly="true"
    OutputChannelId="VideoStream" >
    <DefaultClientInfo>
      <MessageTypes>
        <Message Type="IMAGE" />
      </MessageTypes>
      <ImageNames>
        <Image Name="Image" EmbeddedTransformToFrame="Reference" />
      </ImageNames>
    </DefaultClientInfo>
  </PlusOpenIGTLinkServer>

</PlusConfiguration>
