<PlusConfiguration version="2.1">
  <DataCollection StartupDelaySec="1.0">
    <DeviceSet
      Name="PlusServer: Open Haptics device tracking"
      Description="Broadcasting  device stylyus tracking data through OpenIGTLink." />
    <Device
      Id="TrackerDevice"
      Type="OpenHapticsDevice"
      AcquisitionRate="50"
      ToolReferenceFrame="Base"
      DeviceName="PLUS"  >
      <DataSources>
        <DataSource Type="Tool" Id="Stylus"  PortName="Stylus" />
        <DataSource Type="Tool" Id="StylusVelocity"  PortName="StylusVelocity" />
        <DataSource Type="Tool" Id="Buttons"  PortName="Buttons" />
      </DataSources>
      <OutputChannels>
        <OutputChannel Id="NeedleStream">
          <DataSource Id="Stylus" />
          <DataSource Id="StylusVelocity" />
          <DataSource Id="Buttons" />
        </OutputChannel>
      </OutputChannels>
    </Device>
  </DataCollection>
  <PlusOpenIGTLinkServer
    MaxNumberOfIgtlMessagesToSend="1"
    MaxTimeSpentWithProcessingMs="50"
    ListeningPort="18944"
    OutputChannelId="NeedleStream" >
    <DefaultClientInfo>
      <MessageTypes>
        <Message Type="TRANSFORM" />
      </MessageTypes>
      <TransformNames>
        <Transform Name="StylusToBase" />
        <Transform Name="StylusVelocityToBase" />
        <Transform Name="ButtonsToBase" />
      </TransformNames>
    </DefaultClientInfo>
  </PlusOpenIGTLinkServer>
</PlusConfiguration>
