 <PlusConfiguration version="2.1">

  <DataCollection StartupDelaySec="1.0" >
    <DeviceSet 
      Name="PlusServer: Point Grey Spinnaker API Video Acquisition."
      Description="Broadcasting acquired video through OpenIGTLink"
    />
    <Device
      Id="VideoDevice"
      Type="SpinnakerVideo"
      CameraNumber="0"
      >
      <DataSources>
        <DataSource Type="Video" Id="Video" PortUsImageOrientation="MF"  />
      </DataSources>      
      <OutputChannels>
        <OutputChannel Id="VideoStream" VideoDataSourceId="Video" />
      </OutputChannels>
    </Device>
    <Device
      Id="CaptureDevice"
      Type="VirtualCapture"
      BaseFilename="RecordingTest.igs.mha"
      EnableCapturingOnStart="FALSE" >
      <InputChannels>
        <InputChannel Id="VideoStream" />
      </InputChannels>
    </Device>
  </DataCollection>

  <PlusOpenIGTLinkServer 
    MaxNumberOfIgtlMessagesToSend="1" 
    MaxTimeSpentWithProcessingMs="50" 
    ListeningPort="18944" 
    SendValidTransformsOnly="true" 
    OutputChannelId="VideoStream" > 
    <DefaultClientInfo> 
      <MessageTypes> 
        <Message Type="IMAGE" />
      </MessageTypes>
      <ImageNames>
        <Image Name="Image" EmbeddedTransformToFrame="Image" />
      </ImageNames>
    </DefaultClientInfo>
  </PlusOpenIGTLinkServer>

</PlusConfiguration>
