<PlusConfiguration version="2.3"> 
  <DataCollection StartupDelaySec="1.0" >
    <DeviceSet 
      Name="PlusServer: Medtronic StealthLink tracker"
      Description="Broadcasting tool tracking data through OpenIGTLink
Tools: Stylus (Passive Planar, Blunt) , Reference (Small Passive Cranial Frame)" 
    />
    <Device
      Id="SLD"
      Type="StealthLinkTracker"
      ServerAddress="130.15.7.88"
      ServerPort="6996"
      RegistrationUpdatePeriod="0.0"
      ToolReferenceFrame="Tracker" >
      <DataSources>
        <!-- Remove tools that are not defined by the StealthStation -->
        <!-- Corresponding tools also need to be removed from the OutputChannels section -->
        <DataSource Type="Tool" Id="Stylus" PortName="Passive Planar, Blunt" />
        <DataSource Type="Tool" Id="NProbe" 	 PortName="Navigus Probe" />
        <DataSource Type="Tool" Id="TProbe" 	 PortName="Touch-n-Go Probe" />
        <DataSource Type="Tool" Id="Reference" PortName="Small Passive Cranial Frame" />
        <!--  The Ras virtual tool will only give a valid value when an image is acquired from the server (GetImage or GetExamData). -->
        <DataSource Type="Tool" Id="Ras" 	    PortName="RasRegistration" />
      </DataSources>
      <OutputChannels>
        <OutputChannel Id="TrackerStream">
          <!-- Remove tools that are not defined by the StealthStation -->
          <DataSource  Id="NProbe" />
          <DataSource  Id="TProbe" />
          <DataSource  Id="Stylus" />
          <DataSource  Id="Reference" />
          <DataSource  Id="Ras" />
        </OutputChannel>
      </OutputChannels>
    </Device>
    <Device
      Id="CaptureDevice"
      Type="VirtualCapture"
      BaseFilename="RecordingTest.igs.mha"
      EnableCapturingOnStart="FALSE" >
      <InputChannels>
        <InputChannel Id="TrackerStream" />
      </InputChannels>
    </Device>
  </DataCollection>
  
  <CoordinateDefinitions>
    <Transform From="Ras" To="Lps"
      Matrix="
        -1  0  0  0
         0 -1  0  0
         0  0  1  0        
         0  0  0  1" />
  </CoordinateDefinitions>  
  
  <PlusOpenIGTLinkServer 
    MaxNumberOfIgtlMessagesToSend="1" 
    MaxTimeSpentWithProcessingMs="50" 
    ListeningPort="18944" 
    OutputChannelId="TrackerStream" > 
    <DefaultClientInfo> 
      <MessageTypes> 
        <Message Type="TRANSFORM" />
      </MessageTypes>
      <TransformNames> 
        <!-- To avoid "Transform path not found" warnings, remove transforms for tools that are not defined by the StealthStation -->
        <Transform Name="StylusToTracker" />
        <Transform Name="ReferenceToTracker" />
        <!-- RasToReference will not be available until an image is acquired from the server (GetImage or GetExamData). -->
        <Transform Name="RasToReference"  />
        <Transform Name="StylusToReference"  />
        <Transform Name="NProbeToReference"  />
        <Transform Name="TProbeToReference"  />
      </TransformNames>
    </DefaultClientInfo>
  </PlusOpenIGTLinkServer>

</PlusConfiguration>
