<PlusConfiguration version="2.3">

 <DataCollection StartupDelaySec="1.0" >
    <DeviceSet
      Name="WinProbe+PlusServer"
      Description="This is a simple config file of WinProbe ultrasound system which includes OpenIGTLinkServer" />
    <Device
      Id="VideoDevice"
      Type="WinProbeVideo"
      UseDeviceFrameReconstruction="True"
      AcquisitionRate="100"
      LocalTimeOffsetSec="0"
      TransducerID="{b4ebdf21-2144-4011-8a92-b8b219b69c05}"
      TimeGainCompensation="20.0 20.0 20.0 20 20 20 20.0 20"
      FocalPointDepth="10.0 0 0 0"
      LogLinearKnee="32"
      MaxValue="5000"
      MinValue="4"
      LogMax="64"
      TransmitFrequencyMHz="9.5"
      SpatialCompoundEnabled="False"
      SpatialCompoundAngle="5.0"
      SpatialCompoundCount="3"
      ScanDepthMm="38.1"
      Mode="M"
      Voltage="50">
      <DataSources>
        <DataSource Type="Video" Id="Video" PortName="B" PortUsImageOrientation="MF" BufferSize="200" AveragedItemsForFiltering="0"/>
        <!-- <DataSource Type="Video" Id="RfVideo" PortName="Rf" PortUsImageOrientation="FM"/> -->
      </DataSources>
      <OutputChannels>
        <OutputChannel Id="VideoStream" VideoDataSourceId="Video" />
        <!-- <OutputChannel Id="RfStream" VideoDataSourceId="RfVideo" /> -->
      </OutputChannels>
    </Device>
  </DataCollection>

    <CoordinateDefinitions>
    <Transform From="Image" To="Reference"
      Matrix="
        0.3 0.0 0.0 0.0
        0.0 0.3 0.0 0.0
        0.0 0.0 1.0 0.0        
        0 0 0 1" />
    <Transform From="ImageRF" To="Reference"
      Matrix="
        0.0 0.3 0.0 0.0
        0.3 0.0 0.0 0.0
        0.0 0.0 1.0 0.0        
        0 0 0 1" />
  </CoordinateDefinitions>

  <PlusOpenIGTLinkServer 
    MaxNumberOfIgtlMessagesToSend="1" 
    MaxTimeSpentWithProcessingMs="50" 
    ListeningPort="18944" 
    SendValidTransformsOnly="true" 
    OutputChannelId="VideoStream" > 
    <DefaultClientInfo> 
      <MessageTypes> 
        <Message Type="IMAGE" />
      </MessageTypes>
      <ImageNames>
        <Image Name="Image" EmbeddedTransformToFrame="Reference" />
      </ImageNames>
    </DefaultClientInfo>
  </PlusOpenIGTLinkServer>

  <PlusOpenIGTLinkServer 
    MaxNumberOfIgtlMessagesToSend="1" 
    MaxTimeSpentWithProcessingMs="50" 
    ListeningPort="18945" 
    SendValidTransformsOnly="true" 
    OutputChannelId="RfStream" > 
    <DefaultClientInfo> 
      <MessageTypes> 
        <Message Type="IMAGE" />
      </MessageTypes>
      <ImageNames>
        <Image Name="ImageRF" EmbeddedTransformToFrame="Reference" />
      </ImageNames>
    </DefaultClientInfo>
  </PlusOpenIGTLinkServer>

</PlusConfiguration>
