<PlusConfiguration version="2.1">
  <DataCollection StartupDelaySec="1.0">
    <DeviceSet 
      Name="PlusServer: WitMotion motion module" 
      Description="Collecting orientation data from a WitMotion JY901 motion module and broadcasting through OpenIGTLink"
    />
    <Device 
      Id="TrackerDevice"
      Type="WitMotionTracker"
      SerialPort="9"
      BaudRate="115200"
      ToolReferenceFrame="Tracker" >
      <DataSources>
        <DataSource Type="Tool" Id="Accel" PortName="OrientationSensor" />
      </DataSources>
      <OutputChannels>
        <OutputChannel Id="TrackerChannel">
          <DataSource Id="Accel"/>
        </OutputChannel>
      </OutputChannels>
    </Device>    
    <Device
      Id="CaptureDevice"
      Type="VirtualCapture"
      BaseFilename="RecordingTest.igs.mha"
      EnableCapturingOnStart="FALSE" >
      <InputChannels>
        <InputChannel Id="TrackerChannel" />
      </InputChannels>
    </Device>
  </DataCollection>
  
  <PlusOpenIGTLinkServer 
    MaxNumberOfIgtlMessagesToSend="1" 
    MaxTimeSpentWithProcessingMs="50" 
    ListeningPort="18944" 
    OutputChannelId="TrackerChannel"
    > 
    <DefaultClientInfo> 
      <MessageTypes> 
        <Message Type="TRANSFORM" />
      </MessageTypes>
      <TransformNames> 
        <Transform Name="AccelToTracker" />
      </TransformNames>
    </DefaultClientInfo>
  </PlusOpenIGTLinkServer> 
</PlusConfiguration>