 <PlusConfiguration version="2.1">
  <DataCollection StartupDelaySec="1.0" >
    <DeviceSet 
      Name="PlusServer: Saved Agilent scope data of needle in water bath"
      Description="Broadcasting acquired tracking+video through OpenIGTLink"
    />

    <Device
      Id="AgilentReplayDevice"
      Type="SavedDataSource" 
      UseData="IMAGE_AND_TRANSFORM"
      RepeatEnabled="TRUE"
      AcquisitionRate="50"
      LocalTimeOffsetSec="0.0" 
      SequenceFile="Agilent_Scope_Recording_DP310.igs.nrrd" >
      <DataSources>
        <DataSource Type="Video" Id="Video" PortUsImageOrientation="MF"  />
      </DataSources>      
      <OutputChannels>
        <OutputChannel Id="TrackedVideoStream" VideoDataSourceId="Video" />
      </OutputChannels>
    </Device>
  </DataCollection>

  <CoordinateDefinitions>
    <Transform From="Image" To="Tracker"
      Matrix="
        1 0 0 0
        0 1 0 0
        0 0 1 0
        0 0 0 1"
       Error="2.26179" Date="022017_000330" />
  </CoordinateDefinitions>
  
  <PlusOpenIGTLinkServer 
    MaxNumberOfIgtlMessagesToSend="1" 
    MaxTimeSpentWithProcessingMs="50" 
    ListeningPort="18944" 
    SendValidTransformsOnly="true" 
    OutputChannelId="TrackedVideoStream" > 
    <DefaultClientInfo> 
      <MessageTypes> 
        <Message Type="IMAGE" />
        <Message Type="TRANSFORM" />
      </MessageTypes>
      <TransformNames> 
        <Transform Name="ZOffsetToTracker" />
      </TransformNames>
      <ImageNames>
        <Image Name="Image" EmbeddedTransformToFrame="Tracker" />
      </ImageNames>
    </DefaultClientInfo>
  </PlusOpenIGTLinkServer>
</PlusConfiguration>
