<PlusConfiguration version="2.1">

  <DataCollection StartupDelaySec="1.0" >
    <DeviceSet 
      Name="fCal: NDI Polaris tracker (Stylus)"
      Description="NDI Polaris for stylus tracking" />

    <Device
      Id="TrackerDevice"
      Type="NDITracker"
      NetworkHostname="192.168.0.30"
      NetworkPort="8765"
      LocalTimeOffsetSec="0.0"
      ToolReferenceFrame="Reference" >
      <DataSources>
        <DataSource Type="Tool" Id="Stylus" RomFile="../NdiToolDefinitions/8700449.rom"  />
      </DataSources>
      <OutputChannels>
        <OutputChannel Id="TrackerChannel" >
          <DataSource Id="Stylus"/>
        </OutputChannel>
      </OutputChannels>
    </Device>
  </DataCollection>

  <Rendering WorldCoordinateFrame="Tracker">
    <DisplayableObject Type="Axes" ObjectCoordinateFrame="Reference" />
    <DisplayableObject Type="Axes" ObjectCoordinateFrame="Tracker" />
  </Rendering>

  <PhantomDefinition>
    <Description
      Name="fCAL"
      Type="Multi-N"
      Version="1.0"
      WiringVersion="1.0"
      Institution="Queen's University PerkLab" />
    <Geometry>
      <Pattern Type="NWire">
        <Wire Name="1:E3_e3" EndPointFront="20.0 0.0 5.0" EndPointBack="20.0 40.0 5.0" />
        <Wire Name="2:F3_j3" EndPointFront="25.0 0.0 5.0" EndPointBack="45.0 40.0 5.0" />
        <Wire Name="3:K3_k3" EndPointFront="50.0 0.0 5.0" EndPointBack="50.0 40.0 5.0" />
      </Pattern>
      <Pattern Type="NWire">
        <Wire Name="4:E4_e4" EndPointFront="20.0 0.0 0.0" EndPointBack="20.0 40.0 0.0" />
        <Wire Name="5:J4_f4" EndPointFront="45.0 0.0 0.0" EndPointBack="25.0 40.0 0.0" />
        <Wire Name="6:K4_k4" EndPointFront="50.0 0.0 0.0" EndPointBack="50.0 40.0 0.0" />
      </Pattern>
      <Landmarks>
        <Landmark Name="#1" Position="95.0 5.0 15.0" />
        <Landmark Name="#2" Position="95.0 40.0 15.0" />
        <Landmark Name="#3" Position="95.0 40.0 0.0" />
        <Landmark Name="#4" Position="95.0 0.0 0.0" />
        <Landmark Name="#5" Position="-25.0 40.0 15.0" />
        <Landmark Name="#6" Position="-25.0 0.0 10.0" />
        <Landmark Name="#7" Position="-25.0 0.0 0.0" />
        <Landmark Name="#8" Position="-25.0 40.0 0.0" />
      </Landmarks>
    </Geometry>
  </PhantomDefinition>

  <fCal
    PhantomModelId="PhantomModel"
    TransducerModelId="ProbeModel"
    StylusModelId="StylusModel"
    ImageDisplayableObjectId="LiveImage"
    NumberOfCalibrationImagesToAcquire="200"
    NumberOfValidationImagesToAcquire="100"
    NumberOfStylusCalibrationPointsToAcquire="400"
    RecordingIntervalMs="100"
    MaxTimeSpentWithProcessingMs="70"
    ImageCoordinateFrame="Image"
    ProbeCoordinateFrame="Probe"
    ReferenceCoordinateFrame="Reference"
    TransducerOriginCoordinateFrame="TransducerOrigin"
    TransducerOriginPixelCoordinateFrame="TransducerOriginPixel"
    TemporalCalibrationDurationSec="10"
    FixedChannelId="VideoStream" 
    FixedSourceId="Video"
    MovingChannelId="TrackerStream"
    MovingSourceId="ProbeToTracker"
    DefaultSelectedChannelId="TrackerChannel" 
  />
  
  <vtkPlusPivotCalibrationAlgo
    ObjectMarkerCoordinateFrame="Stylus"
    ReferenceCoordinateFrame="Reference"
    ObjectPivotPointCoordinateFrame="StylusTip" 
  />

  <vtkPlusPhantomLandmarkRegistrationAlgo
    PhantomCoordinateFrame="Phantom"
    ReferenceCoordinateFrame="Reference"
    StylusTipCoordinateFrame="StylusTip" 
  />
  
  <vtkPhantomLinearObjectRegistrationAlgo
    PhantomCoordinateFrame="Phantom"
    ReferenceCoordinateFrame="Reference"
    StylusTipCoordinateFrame="StylusTip" 
  />

  <vtkPlusProbeCalibrationAlgo
    ImageCoordinateFrame="Image"
    ProbeCoordinateFrame="Probe"
    PhantomCoordinateFrame="Phantom"
    ReferenceCoordinateFrame="Reference" 
  />
</PlusConfiguration>