<PlusConfiguration version="2.5">

  <DataCollection StartupDelaySec="1.0">
    <DeviceSet
      Name="Stable Test: OptiTrack Do Not Attach To Running Motive"
      Description="Broadcasting tracking data through OpenIGTLink."
    />
    <Device
      Id="TrackerDevice"
      Type="OptiTrack"
      ToolReferenceFrame="Tracker" 
      ProjectFile="StableTestProject.ttp"
      AttachToRunningMotive="FALSE"
      MotiveDataDescriptionsUpdateTimeSec="1.0" >
      <DataSources>
        <DataSource Type="Tool" Id="Stylus" />
      </DataSources>
      <OutputChannels>
        <OutputChannel Id="TrackerStream">
        <DataSource Type="Tool" Id="Stylus" />
        </OutputChannel>
      </OutputChannels>
    </Device>
  </DataCollection>

  <PlusOpenIGTLinkServer
    MaxNumberOfIgtlMessagesToSend="1"
    MaxTimeSpentWithProcessingMs="50"
    ListeningPort="18944"
    SendValidTransformsOnly="TRUE"
    OutputChannelId="TrackerStream" >
    <DefaultClientInfo>
      <MessageTypes>
        <Message Type="TRANSFORM" />
      </MessageTypes>
      <TransformNames>
        <Transform Name="StylusToTracker" />
      </TransformNames>
    </DefaultClientInfo>
  </PlusOpenIGTLinkServer>
  
</PlusConfiguration>