<PlusConfiguration version="2.3">
  <DataCollection StartupDelaySec="1.0">
    <DeviceSet Name="TEST Data collection for AzureKinect Device" Description="" />
    <Device Id="VideoDevice" Type="AzureKinect" AlignDepthStream="TRUE">
      <DataSources>
        <DataSource Type="Video" Id="VideoRGB" FrameType="RGB" FrameSize="1920" FrameRate="15" PortUsImageOrientation="UN" />
        <DataSource Type="Video" Id="VideoDEPTH" FrameType="DEPTH" FrameSize="1024" FrameRate="15" PortUsImageOrientation="UN" />
        <DataSource Type="Video" Id="VideoPCL" FrameType="PCL" FrameSize="1920" FrameRate="15" PortUsImageOrientation="UN" />
      </DataSources>
      <OutputChannels>
        <OutputChannel Id="VideoStreamRGB" VideoDataSourceId="VideoRGB" />
        <OutputChannel Id="VideoStreamDEPTH" VideoDataSourceId="VideoDEPTH" />
        <OutputChannel Id="VideoStreamPCL" VideoDataSourceId="VideoPCL" />
      </OutputChannels>
    </Device>
  </DataCollection>
</PlusConfiguration>