 <PlusConfiguration version="2.1">

  <DataCollection StartupDelaySec="1.0" >
    <DeviceSet
      Name="PlusServer: PCO Ultraviolet Camera"
      Description="Broadcasting acquired video through PlusServer from a PCO Ultraviolet Camera"
    />
    <Device
      Id="VideoDevice"
      Type="UltravioletPCOUVCam" 
      ExposureTime="100"
      TimeBaseExposure="2"
      >
      <DataSources>
        <DataSource Type="Video" Id="Video" PortUsImageOrientation="UF"/>
      </DataSources>
      <OutputChannels>
        <OutputChannel Id="VideoStream" VideoDataSourceId="Video" />
      </OutputChannels>
    </Device>
  </DataCollection>

  <CoordinateDefinitions>
    <Transform From="Image" To="Reference"
      Matrix="
        0.5 0 0 0
        0 -0.5 0 0
        0 0 0.5 0
        0 0 0 1" />
  </CoordinateDefinitions>

  <PlusOpenIGTLinkServer
    MaxNumberOfIgtlMessagesToSend="1"
    MaxTimeSpentWithProcessingMs="33"
    ListeningPort="18944"
    SendValidTransformsOnly="true"
    OutputChannelId="VideoStream" >
    <DefaultClientInfo>
      <MessageTypes>
        <Message Type="IMAGE" />
      </MessageTypes>
      <ImageNames>
        <Image Name="Image" EmbeddedTransformToFrame="Reference" />
      </ImageNames>
    </DefaultClientInfo>
  </PlusOpenIGTLinkServer>

</PlusConfiguration>
