<PlusConfiguration version="2.3">
  <DataCollection StartupDelaySec="1.0">
    <Device
      Id="VideoDevice"
      Type="IntersonArraySDKCxxVideo" 
      DynRangeDb="0.4" 
      FrequencyMhz="5.0" >
      <DataSources>
        <DataSource Type="Video" Id="Video" PortName="B" PortUsImageOrientation="UN" />
      </DataSources>
      <OutputChannels>
        <OutputChannel Id="VideoStream" VideoDataSourceId="Video">
          <RfProcessing>
            <ScanConversion 
              TransducerName="Linear 7.5MHz"
              TransducerGeometry="LINEAR"
              RadiusStartMm="12.4"
              RadiusStopMm="117.5"
              ThetaStartDeg="-45.0"
              ThetaStopDeg="45.0"
              OutputImageSizePixel="800 600"
              TransducerCenterPixel="400 50"
              OutputImageSpacingMmPerPixel="0.20 0.20" /> 
          </RfProcessing>
        </OutputChannel>
      </OutputChannels>
    </Device>
  </DataCollection>
</PlusConfiguration>
