<PlusConfiguration version="2.1">

  <DataCollection StartupDelaySec="1.0" >
    <DeviceSet
      Name="Replay data sending TDATA over OpenIGTLink" 
      Description="Test server config for TDATA testing" />

    <Device
      Id="TrackedVideoDevice"
      Type="SavedDataSource"
      SequenceFile="fCal_Test_Calibration_3NWires.igs.mha"
      UseData="TRANSFORM"
      UseOriginalTimestamps="TRUE"
      RepeatEnabled="TRUE"
      ToolReferenceFrame="Tracker">
      <DataSources>
        <DataSource Type="Tool" Id="Probe" />
        <DataSource Type="Tool" Id="Reference" />
      </DataSources>
      <OutputChannels>
        <OutputChannel Id="TrackerStream">
          <DataSource Id="Probe" />
          <DataSource Id="Reference" />
        </OutputChannel>
      </OutputChannels>
    </Device>
  </DataCollection>

  <PlusOpenIGTLinkServer
    MaxNumberOfIgtlMessagesToSend="1"
    MaxTimeSpentWithProcessingMs="10"
    ListeningPort="22222"
    OutputChannelId="TrackerStream" >
    <DefaultClientInfo>
      <MessageTypes>
        <Message Type="TDATA" />
      </MessageTypes>
      <TransformNames>
        <Transform Name="ProbeToTracker" />
        <Transform Name="ReferenceToTracker" />
      </TransformNames>
    </DefaultClientInfo>
  </PlusOpenIGTLinkServer>

  <CoordinateDefinitions>
    <Transform From="Image" To="Probe"
      Matrix="
        0.107535	0.00094824	0.0044213	-65.9013
        0.0044901	-0.00238041	-0.106347	-3.05698
        -0.000844189	0.105271	-0.00244457	-17.1613
        0	0	0	1"
      Error="0.804961" Date="121012_223643"/>
  </CoordinateDefinitions>
</PlusConfiguration>